CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:426
GitHash:
ModuleCount:15
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Well>[A-P][0-9]{1,2})_.*_Stitched\[(?P<Modality>.*)\].*_(?P<Timepoint>[0-9]{3})
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "Texas Red") (file doesnot contain "outline")
    Name to assign these images:texasred
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "GFP") (file doesnot contain "outline")
    Name to assign these images:gfp
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Bright Field")
    Name to assign these images:brightfield
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:1
    Metadata category:Well

EnhanceOrSuppressFeatures:[module_num:5|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notes:['Attempts to enhance the brightness of small speckles to make it easier for "IdentifyPrimaryObjects" to pick out Texas Red cells.']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
    Select the input image:texasred
    Name the output image:texasred_enhanced
    Select the operation:Enhance
    Feature size:8
    Feature type:Speckles
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    Speed and accuracy:Slow
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
EnhanceOrSuppressFeatures:[module_num:6|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notes:['Attempts to enhance the brightness of small speckles to make it easier for "IdentifyPrimaryObjects" to pick out GFP cells.']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
    Select the input image:gfp
    Name the output image:gfp_enhanced
    Select the operation:Enhance
    Feature size:8
    Feature type:Speckles
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    Speed and accuracy:Slow
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
IdentifyPrimaryObjects:[module_num:7|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notes:['Attempts to identify all cells on the Texas Red images.', '', 'NOTE: If you notice that small dim cells are being missed, you can adjust "threshold smoothing scale" below to a lower value.']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
    Select the input image:texasred_enhanced
    Name the primary objects to be identified:texasred_objects
    Typical diameter of objects, in pixel units (Min,Max):2,10
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:0
    Threshold correction factor:0.3
    Lower and upper bounds on threshold:0.02,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
    Size of adaptive window:50
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    Thresholding method:Otsu

IdentifyPrimaryObjects:[module_num:8|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notes:['Attempts to identify all cells on the GFP images.', '', 'NOTE: If you notice that small dim cells are being missed, you can adjust "threshold smoothing scale" below to a lower value.']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
    Select the input image:gfp_enhanced
    Name the primary objects to be identified:gfp_objects
    Typical diameter of objects, in pixel units (Min,Max):2,10
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After declumping only
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:0.0
    Threshold correction factor:0.3
    Lower and upper bounds on threshold:0.02,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
    Size of adaptive window:50
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    Thresholding method:Otsu

OverlayOutlines:[module_num:9|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:brightfield
    Name the output image:brightfield_overlay
    Outline display mode:Color
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    How to outline:Outer
    Select outline color:#FB0207
    Select objects to display:texasred_objects
    Select outline color:Green
    Select objects to display:gfp_objects

SaveImages:[module_num:10|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
    Select the type of image to save:Image
    Select the image to save:brightfield_overlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:brightfield
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_outlines
    Saved file format:png
    Output file location:Default Output Folder|/Volumes/scottj10lab/Maxi/breast_cancer_disparities/game_assays/pilot1_20230804/outlines
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

ExportToSpreadsheet:[module_num:11|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|Dropbox/Projects/breast_cancer_disparities/code/data/game_assays/pilot1_20230804
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:Image|Count_gfp_objects,Image|Count_texasred_objects,Image|FileName_gfp,Image|FileName_texasred,texasred_objects|Number_Object_Number,texasred_objects|Location_Center_Y,texasred_objects|Location_Center_X,texasred_objects|Location_Center_Z,gfp_objects|Number_Object_Number,gfp_objects|Location_Center_X,gfp_objects|Location_Center_Y,gfp_objects|Location_Center_Z
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:No
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
    File name:results.csv
    Use the object name for the file name?:No
    Data to export:gfp_objects
    Combine these object measurements with those of the previous object?:No
    File name:locations_gfp.csv
    Use the object name for the file name?:No
    Data to export:texasred_objects
    Combine these object measurements with those of the previous object?:No
    File name:locations_mCherry.csv
    Use the object name for the file name?:No

OverlayOutlines:[module_num:12|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notes:['Applies a green outline around all identified objects on GFP input images.']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enabled:False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
    Display outlines on a blank image?:No
    Select image on which to display outlines:gfp
    Name the output image:gfp_overlay
    Outline display mode:Color
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    How to outline:Outer
    Select outline color:green
    Select objects to display:gfp_objects

OverlayOutlines:[module_num:13|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notes:['Applies a red outline around all identified objects on Texas Red input images.']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enabled:False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
    Display outlines on a blank image?:No
    Select image on which to display outlines:texasred
    Name the output image:texasred_overlay
    Outline display mode:Color
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    How to outline:Outer
    Select outline color:#FB0207
    Select objects to display:texasred_objects

SaveImages:[module_num:14|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notes:['Saves the input GFP images with outlines around every identified object.', '', 'IMPORTANT: Change "output file location" below to wherever you\x92d like the annotated images to be stored.']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enabled:False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
    Select the type of image to save:Image
    Select the image to save:gfp_overlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:gfp
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_outlines
    Saved file format:png
    Output file location:Default Output Folder|/Volumes/scottj10lab/Maxi/breast_cancer_disparities/game_assays/pilot1_20230804/outlines
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

SaveImages:[module_num:15|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notes:['Saves the input GFP images with outlines around every identified object.', '', 'IMPORTANT: Change "output file location" below to wherever you\x92d like the annotated images to be stored.']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enabled:False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
    Select the type of image to save:Image
    Select the image to save:texasred_overlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:texasred
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_outlines
    Saved file format:png
    Output file location:Default Output Folder|/Volumes/scottj10lab/Maxi/breast_cancer_disparities/game_assays/pilot1_20230804/outlines
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No
